PsychoPy2experiment version="3.0.0b11"
Settings
  Completed URL = completedURL
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Incomplete URL = incompleteURL
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = (1024, 768)
  expName = LAC-paradigma
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Routines
  Routine trial
  Routine welcome
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Welcome.
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    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine baseline
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Setting baseline
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MovieComponent movie
      backend = moviepy
      forceEndRoutine = False
      movie = lastyear-in-10seconds_firstcut.mp4
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine beginning
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Starting trial-loop.
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    KeyboardComponent key_resp_4
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine respiration_trigger
    CodeComponent code_2
      Code Type = Py
  Routine stimuli
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        import serial

        try:
            olf = serial.Serial('COM4', 19200) # when testing WITH OLF
        except serial.SerialException:
            print("Couldnt find COM port. Using port = None")
            olf = None # when testing withOUT OLF
      Begin Routine:
        if olf:
            olf.write(f"\nF{channel}\r")
            time.sleep(3)
            olf.write(f"\nF{channel}\r")
      End Experiment:
        if olf:
            olf.close()
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        stimulus

        +++++
        +++++
        +++++
    TextComponent text_7
      letterHeight = 0.5
      pos = (200, 200)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $odor
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  Routine intensity
    RatingScaleComponent intensity_rating
      forceEndRoutine = True
      high = 7
      low = 1
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
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    TextComponent text_8
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Intensity Rating
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  Routine pleasantness
    RatingScaleComponent pleasantness_rating
      forceEndRoutine = True
      high = 7
      low = 1
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
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    TextComponent text_9
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Pleasantness Rating
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  Routine familarity
    RatingScaleComponent familarity_rating
      forceEndRoutine = True
      high = 7
      low = 1
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
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    TextComponent text_11
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Familarity Rating
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  Routine arousel
    RatingScaleComponent arousel_rating
      forceEndRoutine = True
      high = 7
      low = 1
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
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    TextComponent text_10
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Arousel Rating
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  Routine interstimulus
    TextComponent text_5
      durationEstim = 10
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = INTERSTIMULUS
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  Routine end
    TextComponent text_6
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = fin.
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Flow
  Routine welcome
  Routine baseline
  Routine beginning
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = odors.csv
    loopType = random
    nReps = 10
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    conditions:
      [OrderedDict([('odor', 'coffee'), ('channel', 1)]),
      OrderedDict([('odor', 'lavender'), ('channel', 2)]),
      OrderedDict([('odor', 'empyty'), ('channel', 0)])]
    Routine respiration_trigger
    Routine stimuli
    Routine intensity
    Routine pleasantness
    Routine familarity
    Routine arousel
    Routine interstimulus
  LoopTerminator trials
  Routine end
